<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Phase" />
        <Property Name="SquareWave" />
        <Property Name="Radius" />
        <Property Name="Aperture" />
        <Property Name="Opacity" />
        <Property Name="ColorR" />
        <Property Name="ColorG" />
        <Property Name="ColorB" />
        <Property Name="ColorA" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="X" />
                <Property Name="LocationY" Selector="Y" />
                <Property Name="Angle" Selector="Orientation" />
                <Property Name="SpatialFrequency" Selector="SpatialFrequency" />
                <Property Name="TemporalFrequency" Selector="TemporalFrequency" />
                <Property Name="Contrast" Selector="Contrast" />
                <Property Name="ExtentX" Selector="Diameter" />
                <Property Name="ExtentY" Selector="Diameter" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Phase" />
              <Property Name="SquareWave" />
              <Property Name="Radius" />
              <Property Name="Aperture" />
              <Property Name="Opacity" />
              <Property Name="ColorR" />
              <Property Name="ColorG" />
              <Property Name="ColorB" />
              <Property Name="ColorA" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawColoredGratings.bonsai">
              <LocationX>0.5</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>10</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(Duration)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnRenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Parameters</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(Delay)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDO2Pulse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>DO2</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseDO2Payload">
                      <beh:PulseDO2>100</beh:PulseDO2>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>DO2</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="17" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="23" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>