WorkflowBuilder(Version=2.9.0)
Bonsai.Shaders.CreateWindow
  Width=560
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Navy
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Fixed
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=natural_movie_TOE_3_shuffle
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\natural_movie_TOE_3_shuffle.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=natural_movie_TOE_2_shuffle
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\natural_movie_TOE_2_shuffle.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=natural_movie_TOE_2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\natural_movie_TOE_2.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=natural_movie_TOE_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\natural_movie_TOE_1.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=natural_movie_TOE_3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\natural_movie_TOE_3.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=natural_movie_TOE_1_shuffle
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\natural_movie_TOE_1_shuffle.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=zebra_allen_screen_60s_tscale_30_xyscale_1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\zebra_allen_screen_60s_tscale_30_xyscale_1.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
    TextureConfiguration=Bonsai.Shaders.VideoTexture
      Name=zebra_allen_screen_tscale_30_scale_10
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Movies\zebra_allen_screen_tscale_30_scale_10.mp4
      FlipMode=Vertical
      FrameCount=nil
      StartPosition=0
      BufferLength=nil
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColoredGratings
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=BonVision:Shaders.Gratings.vert
      FragmentShader=Shaders\ColoredGratings.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=ColorBalance
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=BonVision:Shaders.Quad.vert
      FragmentShader=Shaders\ColorBalance.frag
-> Bonsai.Resources.LoadResources

SubscribeSubject BehaviorEvents => #5
ExternalizedMapping(DeviceName) => #6
#5, #6 -> IncludeWorkflow
  Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
  DeviceMetadata:
    %YAML 1.1
    ---
    # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
    device: Behavior
    whoAmI: 1216
    firmwareVersion: "3.2"
    hardwareTargets: "1.1"
    registers:
      DigitalInputState:
        address: 32
        access: Event
        type: U8
        maskType: DigitalInputs
        description: Reflects the state of DI digital lines of each Port
      Reserved0: &reserved
        address: 33
        type: U8
        access: Read
        description: Reserved for future use
        visibility: private
      OutputSet: &output
        address: 34
        type: U16
        access: Write
        maskType: DigitalOutputs
        description: Set the specified digital output lines.
      OutputClear:
        <<: *output
        address: 35
        description: Clear the specified digital output lines
      OutputToggle:
        <<: *output
        address: 36
        description: Toggle the specified digital output lines
      OutputState:
        <<: *output
        address: 37
        description: Write the state of all digital output lines
      PortDIOSet: &portDIO
        address: 38
        type: U8
        access: Write
        maskType: PortDigitalIOS
        description: Set the specified port DIO lines
      PortDIOClear:
        <<: *portDIO
        address: 39
        description: Clear the specified port DIO lines
      PortDIOToggle:
        <<: *portDIO
        address: 40
        description: Toggle the specified port DIO lines
      PortDIOState:
        <<: *portDIO
        address: 41
        description: Write the state of all port DIO lines
      PortDIODirection:
        <<: *portDIO
        address: 42
        description: Specifies which of the port DIO lines are outputs
      PortDIOStateEvent:
        <<: *portDIO
        address: 43
        access: Event
        description: Specifies the state of the port DIO lines on a line change
      AnalogData:
        address: 44
        type: S16
        length: 3
        access: Event
        description: Voltage at the ADC input and encoder value on Port 2
        payloadSpec:
          AnalogInput0:
            offset: 0
            description: The voltage at the output of the ADC channel 0.
          Encoder:
            offset: 1
            description: The quadrature counter value on Port 2
          AnalogInput1:
            offset: 2
            description: The voltage at the output of the ADC channel 1.
      OutputPulseEnable:
        <<: *output
        address: 45
        description: Enables the pulse function for the specified output lines
      PulseDOPort0: &pulseDO
        address: 46
        type: U16
        access: Write
        minValue: 1
        description: Specifies the duration of the output pulse in milliseconds.
      PulseDOPort1:
        <<: *pulseDO
        address: 47
      PulseDOPort2:
        <<: *pulseDO
        address: 48
      PulseSupplyPort0:
        <<: *pulseDO
        address: 49
      PulseSupplyPort1:
        <<: *pulseDO
        address: 50
      PulseSupplyPort2:
        <<: *pulseDO
        address: 51
      PulseLed0:
        <<: *pulseDO
        address: 52
      PulseLed1:
        <<: *pulseDO
        address: 53
      PulseRgb0:
        <<: *pulseDO
        address: 54
      PulseRgb1:
        <<: *pulseDO
        address: 55
      PulseDO0:
        <<: *pulseDO
        address: 56
      PulseDO1:
        <<: *pulseDO
        address: 57
      PulseDO2:
        <<: *pulseDO
        address: 58
      PulseDO3:
        <<: *pulseDO
        address: 59
      PwmFrequencyDO0: &pwmFreq
        address: 60
        type: U16
        access: Write
        minValue: 1
        description: Specifies the frequency of the PWM at DO0.
      PwmFrequencyDO1:
        <<: *pwmFreq
        address: 61
        description: Specifies the frequency of the PWM at DO1.
      PwmFrequencyDO2:
        <<: *pwmFreq
        address: 62
        description: Specifies the frequency of the PWM at DO2.
      PwmFrequencyDO3:
        <<: *pwmFreq
        address: 63
        description: Specifies the frequency of the PWM at DO3.
      PwmDutyCycleDO0: &pwmDutyCycle
        address: 64
        type: U8
        access: Write
        minValue: 1
        maxValue: 99
        description: Specifies the duty cycle of the PWM at DO0.
      PwmDutyCycleDO1:
        <<: *pwmDutyCycle
        address: 65
        description: Specifies the duty cycle of the PWM at DO1.
      PwmDutyCycleDO2:
        <<: *pwmDutyCycle
        address: 66
        description: Specifies the duty cycle of the PWM at DO2.
      PwmDutyCycleDO3:
        <<: *pwmDutyCycle
        address: 67
        description: Specifies the duty cycle of the PWM at DO3.
      PwmStart: &pwmStartStop
        address: 68
        type: U8
        access: Write
        maskType: PwmOutputs
        description: Starts the PWM on the selected output lines.
      PwmStop:
        <<: *pwmStartStop
        address: 69
        description: Stops the PWM on the selected output lines.
      RgbAll:
        address: 70
        type: &rgbType U8
        length: 6
        access: &rgbAccess Write
        description: Specifies the state of all RGB LED channels.
        payloadSpec:
          Green0:
            offset: 0
            description: The intensity of the green channel in the RGB0 LED.
          Red0:
            offset: 1
            description: The intensity of the red channel in the RGB0 LED.
          Blue0:
            offset: 2
            description: The intensity of the blue channel in the RGB0 LED.
          Green1:
            offset: 3
            description: The intensity of the green channel in the RGB1 LED.
          Red1:
            offset: 4
            description: The intensity of the red channel in the RGB1 LED.
          Blue1:
            offset: 5
            description: The intensity of the blue channel in the RGB1 LED.
      Rgb0: &rgbRegister
        address: 71
        type: *rgbType
        length: 3
        access: *rgbAccess
        description: Specifies the state of the RGB0 LED channels.
        interfaceType: RgbPayload
        payloadSpec:
          Green:
            offset: 0
            description: The intensity of the green channel in the RGB LED.
          Red:
            offset: 1
            description: The intensity of the red channel in the RGB LED.
          Blue:
            offset: 2
            description: The intensity of the blue channel in the RGB LED.
      Rgb1:
        <<: *rgbRegister
        address: 72
        description: Specifies the state of the RGB1 LED channels.
      Led0Current: &ledCurrent
        address: 73
        type: U8
        access: Write
        minValue: 2
        maxValue: 100
        description: Specifies the configuration of current to drive LED 0.
      Led1Current:
        <<: *ledCurrent
        address: 74
        description: Specifies the configuration of current to drive LED 1.
      Led0MaxCurrent: &ledMaxCurrent
        address: 75
        type: U8
        access: Write
        minValue: 5
        maxValue: 100
        description: Specifies the configuration of current to drive LED 0.
      Led1MaxCurrent:
        <<: *ledMaxCurrent
        address: 76
        description: Specifies the configuration of current to drive LED 1.
      EventEnable:
        address: 77
        type: U8
        access: Write
        maskType: Events
        description: Specifies the active events in the device.
      StartCameras: &cameraControl
        address: 78
        type: U8
        access: Write
        maskType: CameraOutputs
        description: Specifies the camera outputs to enable in the device.
      StopCameras:
        <<: *cameraControl
        access: [Write, Event]
        address: 79
        description: Specifies the camera outputs to disable in the device. An event will be issued when the trigger signal is actually stopped being generated.
      EnableServos: &servoControl
        address: 80
        type: U8
        access: Write
        maskType: ServoOutputs
        description: Specifies the servo outputs to enable in the device.
      DisableServos:
        <<: *servoControl
        address: 81
        description: Specifies the servo outputs to disable in the device.
      EnableEncoders:
        address: 82
        type: U8
        access: Write
        maskType: EncoderInputs
        description: Specifies the port quadrature counters to enable in the device.
      EncoderMode:
        address: 83
        type: U8
        access: Write
        maskType: EncoderModeConfig
        description: Configures the operation mode of the quadrature encoders.
      Reserved2:
        <<: *reserved
        address: 84
      Reserved3:
        <<: *reserved
        address: 85
      Reserved4:
        <<: *reserved
        address: 86
      Reserved5:
        <<: *reserved
        address: 87
      Reserved6:
        <<: *reserved
        address: 88
      Reserved7:
        <<: *reserved
        address: 89
      Reserved8:
        <<: *reserved
        address: 90
      Reserved9:
        <<: *reserved
        address: 91
      Camera0Frame: &frameAcquired
        address: 92
        type: U8
        access: Event
        maskType: FrameAcquired
        description: Specifies that a frame was acquired on camera 0.
      Camera0Frequency: &cameraFreq
        address: 93
        type: U16
        access: Write
        minValue: 1
        maxValue: 600
        description: Specifies the trigger frequency for camera 0.
      Camera1Frame:
        <<: *frameAcquired
        address: 94
        description: Specifies that a frame was acquired on camera 1.
      Camera1Frequency:
        <<: *cameraFreq
        address: 95
        description: Specifies the trigger frequency for camera 1.
      Reserved10:
        <<: *reserved
        address: 96
      Reserved11:
        <<: *reserved
        address: 97
      Reserved12:
        <<: *reserved
        address: 98
      Reserved13:
        <<: *reserved
        address: 99
      ServoMotor2Period: &servoPeriod
        address: 100
        type: U16
        access: Write
        minValue: 2
        maxValue: 65534
        description: Specifies the period of the servo motor in DO2, in microseconds.
      ServoMotor2Pulse: &servoPulse
        address: 101
        type: U16
        access: Write
        minValue: 6
        maxValue: 65530
        description: Specifies the pulse of the servo motor in DO2, in microseconds.
      ServoMotor3Period:
        <<: *servoPeriod
        address: 102
        description: Specifies the period of the servo motor in DO3, in microseconds.
      ServoMotor3Pulse:
        <<: *servoPulse
        address: 103
        description: Specifies the pulse of the servo motor in DO3, in microseconds.
      Reserved14:
        <<: *reserved
        address: 104
      Reserved15:
        <<: *reserved
        address: 105
      Reserved16:
        <<: *reserved
        address: 106
      Reserved17:
        <<: *reserved
        address: 107
      EncoderReset:
        address: 108
        type: U8
        access: Write
        maskType: EncoderInputs
        description: Reset the counter of the specified encoders to zero.
      Reserved18:
        <<: *reserved
        address: 109
      EnableSerialTimestamp:
        address: 110
        type: U8
        access: Write
        description: Enables the timestamp for serial TX.
      MimicPort0IR: &mimic
        address: 111
        type: U8
        access: Write
        maskType: MimicOutput
        description: Specifies the digital output to mimic the Port 0 IR state.
      MimicPort1IR:
        <<: *mimic
        address: 112
        description: Specifies the digital output to mimic the Port 1 IR state.
      MimicPort2IR:
        <<: *mimic
        address: 113
        description: Specifies the digital output to mimic the Port 2 IR state.
      Reserved20:
        <<: *reserved
        address: 114
      Reserved21:
        <<: *reserved
        address: 115
      Reserved22:
        <<: *reserved
        address: 116
      MimicPort0Valve:
        <<: *mimic
        address: 117
        description: Specifies the digital output to mimic the Port 0 valve state.
      MimicPort1Valve:
        <<: *mimic
        address: 118
        description: Specifies the digital output to mimic the Port 1 valve state.
      MimicPort2Valve:
        <<: *mimic
        address: 119
        description: Specifies the digital output to mimic the Port 2 valve state.
      Reserved23:
        <<: *reserved
        address: 120
      Reserved24:
        <<: *reserved
        address: 121
      PokeInputFilter:
        address: 122
        type: U8
        access: Write
        description: Specifies the low pass filter time value for poke inputs, in ms.
    bitMasks:
      DigitalInputs:
        description: Specifies the state of port digital input lines.
        bits:
          DIPort0: 0x1
          DIPort1: 0x2
          DIPort2: 0x4
          DI3: 0x8
      DigitalOutputs:
        description: Specifies the state of port digital output lines.
        bits:
          DOPort0: 0x1
          DOPort1: 0x2
          DOPort2: 0x4
          SupplyPort0: 0x8
          SupplyPort1: 0x10
          SupplyPort2: 0x20
          Led0: 0x40
          Led1: 0x80
          Rgb0: 0x100
          Rgb1: 0x200
          DO0: 0x400
          DO1: 0x800
          DO2: 0x1000
          DO3: 0x2000
      PortDigitalIOS:
        description: Specifies the state of the port DIO lines.
        bits:
          DIO0: 0x1
          DIO1: 0x2
          DIO2: 0x4
      PwmOutputs:
        description: Specifies the state of PWM output lines.
        bits:
          PwmDO0: 0x1
          PwmDO1: 0x2
          PwmDO2: 0x4
          PwmDO3: 0x8
      Events:
        description: Specifies the active events in the device.
        bits:
          PortDI: 0x1
          PortDIO: 0x2
          AnalogData: 0x4
          Camera0: 0x8
          Camera1: 0x10
      CameraOutputs:
        description: Specifies camera output enable bits.
        bits:
          CameraOutput0: 0x1
          CameraOutput1: 0x2
      ServoOutputs:
        description: Specifies servo output enable bits.
        bits:
          ServoOutput2: 0x4
          ServoOutput3: 0x8
      EncoderInputs:
        description: Specifies quadrature counter enable bits.
        bits:
          EncoderPort2: 0x4
      FrameAcquired:
        description: Specifies that camera frame was acquired.
        bits:
          FrameAcquired: 0x1
    groupMasks:
      MimicOutput:
        description: Specifies the target IO on which to mimic the specified register.
        values:
          None: 0
          DIO0: 1
          DIO1: 2
          DIO2: 3
          DO0: 4
          DO1: 5
          DO2: 6
          DO3: 7
      EncoderModeConfig:
        description: Specifies the type of reading made from the quadrature encoder.
        values:
          Position: 0
          Displacement: 1
  Modality=nil
  DeviceName=VCO1_Behavior

ExternalizedMapping(Subject, RootFolder)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
  RootFolder=C:/BonsaiData
  Subject=000000
  DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
  SubjectName=DefaultLoggingRootPath
-> MemberSelector(Selector=Root)
-> Take(Count=1)
-> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=Behavior) => #12
ExternalizedMapping(Value(DisplayName=SessionPathOverride, Description="Full path to save session files (overrides RootFolder and Subject)"))
-> StringProperty(Value="")
-> Take(Count=1) => #15
-> Bonsai.Scripting.Expressions.ExpressionCondition => #16
  Expression: String.IsNullOrEmpty(it)
#12, #16 -> SubscribeWhen => #17
#15 -> Bonsai.Scripting.Expressions.ExpressionCondition => #18
  Expression: !String.IsNullOrEmpty(it)
#17, #18 -> Merge
-> AsyncSubject LoggingRootPath

Bonsai.Shaders.RenderFrame => #21
SubscribeSubject LoggingRootPath
-> Format(Format={0}/bonvision_logger.csv, Selector=it)
-> PropertyMapping(FileName) => #24
#21, #24 -> IncludeWorkflow Allen.Log
  Path=BonVision:Logging.FrameEventLogger.bonsai
  Append=false
  Overwrite=true
  Suffix=None
  FileName=C:/BonsaiData/000000/000000_20260508T225432\behavior/bonvision_logger.csv
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Frame, Selector=nil) => #26
SubscribeSubject EndExpt
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=EndFrame, Selector=nil) => #28
#26, #28 -> TakeUntil

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-100, Right=100, Bottom=-60, Top=60)
-> PublishSubject Draw
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Navy, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=20.4, Height=15.4, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15.1))
-> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #35
ExternalizedMapping(R(DisplayName="Screen_RedColor (0-1)"), G(DisplayName="Screen_GreenColor (0-1)"), B(DisplayName="Screen_BlueColor (0-1)")) => #36
#35, #36 -> IncludeWorkflow(Path=Extensions\ColorBalance.bonsai, ExtentX=1, ExtentY=1, LocationX=0, LocationY=0, Layer=1, Angle=0, R=0, G=0, B=1)
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Navy, GammaLut=Gamma\2025-05-22-VCO1-gammalut.bmp)

Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
-> PublishSubject StartExpt
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=START, Selector=nil) => #41
ExternalizedMapping(DueTime(DisplayName="Initial Spont Interval")) => #42
#41, #42 -> Bonsai.Shaders.Delay(DueTime=PT10S)
-> PublishSubject StartGratings

ExternalizedMapping(FileName(DisplayName=stimulus_table_path))
-> Bonsai.IO.CsvReader(FileName=ParameterFiles\pilot_stim_trials.csv, ListSeparator=",", ScanPattern="", SkipRows=1)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(string(it[0]) as TextureName,
    string(it[1]) as TrialType,
    Int32.Parse(it[2]) as TrialDuration,
    Single.Parse(it[3]) as ExtentX,
    Single.Parse(it[4]) as ExtentY)
-> ReplaySubject ListStim(BufferSize=nil) => #48
SubscribeSubject StartExpt
-> Take(Count=1) => #50
#48, #50 -> SubscribeWhen

SubscribeSubject ListStim
-> Bonsai.Numerics.Permutation => #53
ExternalizedMapping(Value(DisplayName=stimulus_table_duration))
-> TimeSpanProperty(Value=PT1H)
-> MemberSelector(Selector=TotalSeconds) => #56
SubscribeSubject ListStim
-> MemberSelector(Selector=TrialDuration)
-> Sum
-> Take(Count=1) => #60
#56, #60 -> Zip
-> Take(Count=1)
-> Divide
-> Bonsai.Numerics.Ceiling
-> Take(Count=1)
-> PropertyMapping(Count) => #66
#53, #66 -> RepeatCount(Count=1) => #67
-> CreateObservable MovieSeries
    WorkflowInput Source1 => #0
    -> Condition IsGrating(Description=IsGrating)
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialType)
        -> Equal(Operand=StringProperty(Value=gratings))
        -> WorkflowOutput
    -> CreateObservable GratingTrial => #2
        BonVision.Collections.GratingsSpecification
          Trials
            GratingParameters(Contrast=1, Orientation=0)
            GratingParameters(Contrast=1, Orientation=45)
            GratingParameters(Contrast=1, Orientation=90)
            GratingParameters(Contrast=1, Orientation=135)
            GratingParameters(Contrast=1, Orientation=180)
            GratingParameters(Contrast=1, Orientation=225)
            GratingParameters(Contrast=1, Orientation=270)
            GratingParameters(Contrast=1, Orientation=315)
            GratingParameters(Contrast=0, Orientation=359)
        -> Bonsai.Numerics.Permutation => #1
        -> InputMapping(Orientation(Selector=Orientation)) => #2
        #1 -> PropertyMapping(Contrast(Selector=Contrast.Value)) => #3
        WorkflowInput Source1 => #4
        -> MemberSelector(Selector=ExtentX) => #5
        #4 -> MemberSelector(Selector=ExtentY) => #6
        #5, #6 -> Zip
        -> Bonsai.Numerics.Max
        -> PropertyMapping(Diameter) => #9
        #2, #3, #9 -> BonVision.Collections.CreateGratingTrial(Delay=1, Duration=2, Diameter=180, X=0, Y=0, Contrast=1, SpatialFrequency=0.04, TemporalFrequency=2, Orientation=135)
        -> GroupWorkflow ColoredGratingSequence
            WorkflowInput Source1 => #0
            ExternalizedMapping(Phase, SquareWave, Radius, Aperture, Opacity, ColorR, ColorG, ColorB, ColorA) => #1
            #0, #1 -> CreateObservable
                WorkflowInput Source1
                -> AsyncSubject Parameters

                SubscribeSubject Draw => #2
                SubscribeSubject Parameters
                -> PropertyMapping => #4
                  LocationX(Selector=X)
                  LocationY(Selector=Y)
                  Angle(Selector=Orientation)
                  SpatialFrequency(Selector=SpatialFrequency)
                  TemporalFrequency(Selector=TemporalFrequency)
                  Contrast(Selector=Contrast)
                  ExtentX(Selector=Diameter)
                  ExtentY(Selector=Diameter)
                ExternalizedMapping(Phase, SquareWave, Radius, Aperture, Opacity, ColorR, ColorG, ColorB, ColorA) => #5
                #2, #4, #5 -> IncludeWorkflow => #6
                  Path=Extensions\DrawColoredGratings.bonsai
                  LocationX=0
                  LocationY=0
                  Layer=0
                  ExtentX=180
                  ExtentY=180
                  SpatialFrequency=0.04
                  TemporalFrequency=2
                  Phase=0
                  Angle=135
                  SquareWave=false
                  Contrast=1
                  DutyCycle=nil
                  Radius=1
                  Aperture=0
                  Opacity=1
                  ColorR=0
                  ColorG=0
                  ColorB=1
                  ColorA=1
                SubscribeSubject Parameters
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(Duration)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT2S)
                -> Bonsai.Shaders.SampleOnRenderFrame => #11
                SubscribeSubject Parameters
                -> MemberSelector(Selector=Orientation)
                -> Bonsai.Numerics.RadianToDegree
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
                  Expression: Convert.ToInt16(Math.Round(it))
                #11, #15 -> Zip
                -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=GratingEnd-{0}, Selector=Item2) => #17
                #6, #17 -> TakeUntil => #18
                SubscribeSubject Parameters
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(Delay)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT1S) => #22
                SubscribeSubject Parameters
                -> MemberSelector(Selector=Orientation)
                -> Bonsai.Numerics.RadianToDegree
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #26
                  Expression: Convert.ToInt16(Math.Round(it))
                #22, #26 -> Zip
                -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=GratingStart-{0}, Selector=Item2) => #28
                #18, #28 -> SubscribeWhen
                -> WorkflowOutput
            -> Concat
            -> WorkflowOutput
        -> TakeLast(Count=1) => #12
        #1 -> MemberSelector(Selector=Orientation.Value)
        -> MulticastSubject Orientation => #14
        #12, #14 -> Zip => #15
        Annotation "Record extra 1sec at the end of trial"(Text="") => #16
        #15, #16 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Int32(it)
        -> WorkflowOutput
    #0 -> Condition IsMovie(Description=IsMovie)
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialType)
        -> Equal(Operand=StringProperty(Value=movie))
        -> WorkflowOutput
    -> CreateObservable MovieTrial => #4
        WorkflowInput Source1
        -> BehaviorSubject Parameters

        SubscribeSubject Draw => #2
        SubscribeSubject Parameters
        -> PropertyMapping(TextureName(Selector=TextureName), ExtentX(Selector=ExtentX), ExtentY(Selector=ExtentY)) => #4
        #2, #4 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawVideo.bonsai
          TextureName=natural_movie_TOE_1
          PlaybackRate=30
          Loop=false
          Angle=0
          ExtentX=198.4
          ExtentY=111.6
          LocationX=0
          LocationY=0
          ScaleX=1
          ScaleY=1
          ShiftX=0
          ShiftY=0
          Layer=0
        -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=MovieFrame-{0}, Selector=it)
        -> TakeLast(Count=1)
        -> MemberSelector(Selector=it)
        -> WorkflowOutput
    #2, #4 -> Merge
    -> WorkflowOutput
-> Merge
-> ToArray
-> Merge
-> Concat
-> TakeLast(Count=1) => #73
SubscribeSubject LoggingRootPath
-> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=nil) => #75
StringProperty(Value=stim_table) => #76
#75, #76 -> Zip
-> Format(Format={0}/{1}.csv, Selector="Item1,Item2")
-> PropertyMapping(FileName) => #79
#67, #79 -> Bonsai.IO.CsvWriter(FileName=C:/BonsaiData/000000/000000_20260508T225432\behavior/stim_table_.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
-> TakeLast(Count=1) => #81
#73, #81 -> Zip => #82
SubscribeSubject StartGratings => #83
#82, #83 -> SubscribeWhen
-> TakeLast(Count=1)
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=END, Selector=nil)
-> PublishSubject EndExpt

SubscribeSubject StartExpt => #88
ExternalizedMapping(Value(DisplayName=sync_sqr))
-> BooleanProperty(Value=true)
-> PropertyMapping(sync_sqr) => #91
ExternalizedMapping(Photodiode_ExtentX, Photodiode_ExtentY, Photodiode_LocationX, Photodiode_LocationY, BlackPhotodiodeFrames, WhiteMinFrames, WhiteMaxFrames) => #92
#88, #91, #92 -> SelectMany Photodiode => #93
    ExternalizedMapping(Value(DisplayName=sync_sqr))
    -> BooleanProperty(Value=true) => #1
    -> Condition => #2
        WorkflowInput Source1
        -> WorkflowOutput
    ExternalizedMapping(Photodiode_ExtentX, Photodiode_ExtentY, Photodiode_LocationX, Photodiode_LocationY, BlackPhotodiodeFrames, WhiteMinFrames, WhiteMaxFrames) => #3
    #2, #3 -> SelectMany => #4
        Bonsai.Shaders.RenderFrame
        -> IntProperty(Value=1) => #1
        ExternalizedMapping(BlackPhotodiodeFrames, WhiteMinFrames, WhiteMaxFrames) => #2
        #1, #2 -> Scan
            WorkflowInput Source1
            -> MemberSelector(Selector=Accumulation) => #1
            -> Subtract(Operand=IntProperty(Value=1)) => #2
            ExternalizedMapping(Value(DisplayName=BlackPhotodiodeFrames))
            -> IntProperty(Value=15)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: -it
            -> PropertyMapping(Value) => #6
            #2, #6 -> Condition => #7
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> NotEqual(Operand=IntProperty(Value=-15))
                -> WorkflowOutput
            #5 -> PropertyMapping(Value) => #8
            #2, #8 -> Condition
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=-15))
                -> WorkflowOutput
            -> Bonsai.Numerics.CreateRandom(Seed=nil) => #10
            ExternalizedMapping(Value(DisplayName=WhiteMinFrames))
            -> IntProperty(Value=10) => #12
            -> PropertyMapping(Lower) => #13
            ExternalizedMapping(Value(DisplayName=WhiteMaxFrames))
            -> PropertySource<Bonsai.Numerics.Distributions.CreateDiscreteUniform,System.Int32>(MemberName=Upper, Value=20) => #15
            -> PropertyMapping(Upper) => #16
            #10, #13, #16 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=20)
            -> Bonsai.Numerics.Distributions.Sample => #18
            #1 -> IsEmpty
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Bonsai.Numerics.CreateRandom(Seed=nil) => #21
            #12 -> PropertyMapping(Lower) => #22
            #15 -> PropertyMapping(Upper) => #23
            #21, #22, #23 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=10, Upper=20)
            -> Bonsai.Numerics.Distributions.Sample => #25
            #7, #18, #25 -> Merge
            -> WorkflowOutput
        -> Skip(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it > 0 ? 1 : 0
        -> PropertyMapping(ColorR, ColorG, ColorB) => #6
        ExternalizedMapping => #7
          ExtentX(DisplayName=Photodiode_ExtentX)
          ExtentY(DisplayName=Photodiode_ExtentY)
          LocationX(DisplayName=Photodiode_LocationX)
          LocationY(DisplayName=Photodiode_LocationY)
        SubscribeSubject Draw => #8
        #6, #7, #8 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=6
          ExtentY=7.5
          LocationX=32
          LocationY=-20
          Layer=2
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1
        -> MemberSelector(Selector=X)
        -> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=Photodiode-{0}, Selector=nil)
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> SelectMany => #6
        Bonsai.Shaders.RenderFrame
        -> FloatProperty(Value=0)
        -> WorkflowOutput

        WorkflowInput Source1
    #4, #6 -> Merge
    -> WorkflowOutput

    WorkflowInput Source1
SubscribeSubject EndExpt => #94
#93, #94 -> TakeUntil

FloatProperty(Value=0)
-> Take(Count=1)
-> BehaviorSubject Orientation

Disable SubscribeSubject Orientation
-> Disable Skip(Count=1)
-> Disable Bonsai.Numerics.RadianToDegree => #101
Disable SubscribeSubject LoggingRootPath
-> Disable AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=nil) => #103
Disable StringProperty(Value=orientations) => #104
#103, #104 -> Disable Zip
-> Disable Format(Format={0}/{1}.csv, Selector="Item1,Item2")
-> Disable PropertyMapping(FileName) => #107
Disable Annotation "Save Orientation Ordering"(Text="") => #108
#101, #107, #108 -> Disable Bonsai.IO.CsvWriter(FileName=C:/BonsaiData/000000/000000_20260508T224311\behavior/orientations.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

Disable SubscribeSubject BehaviorEvents
-> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #111
-> Disable MemberSelector(Selector=Value)
-> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI3))
-> Disable GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0)) => #114
#111 -> Disable MemberSelector(Selector=Seconds) => #115
#114, #115 -> Disable Zip => #116
Disable SubscribeSubject LoggingRootPath
-> Disable AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=nil) => #118
Disable StringProperty(Value=frameClk) => #119
#118, #119 -> Disable Zip
-> Disable Format(Format={0}/{1}.csv, Selector="Item1,Item2")
-> Disable PropertyMapping(FileName) => #122
Disable Annotation "Write Frame Clock Data to CSV"(Text="") => #123
#116, #122, #123 -> Disable Bonsai.IO.CsvWriter(FileName=C:/BonsaiData/000000/000000_20260508T224311\behavior/frameClk.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #125
ExternalizedMapping(PortName) => #126
#125, #126 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7)
-> PublishSubject BehaviorEvents

SubscribeSubject BehaviorEvents
-> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
-> BehaviorSubject analogData

IncludeWorkflow(Path=Extensions\STARTPulse.bonsai)
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=STARTSLAP, Selector=nil) => #133
SubscribeSubject StartExpt => #134
#133, #134 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\STOPPulse.bonsai)
-> IncludeWorkflow Allen.Log(Path=BonVision:Logging.LogEvent.bonsai, Format=STOPSLAP, Selector=nil) => #137
SubscribeSubject EndExpt => #138
#137, #138 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> WorkflowOutput

Disable SubscribeSubject BehaviorEvents
-> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData) => #143
-> Disable MemberSelector(Selector=Seconds) => #144
#143 -> Disable MemberSelector(Selector=Value.AnalogInput0) => #145
#143 -> Disable MemberSelector(Selector=Value.AnalogInput1) => #146
#144, #145, #146 -> Disable Zip => #147
Disable SubscribeSubject LoggingRootPath
-> Disable AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=nil) => #149
Disable StringProperty(Value=analogInputs) => #150
#149, #150 -> Disable Zip
-> Disable Format(Format={0}/{1}.csv, Selector="Item1,Item2")
-> Disable PropertyMapping(FileName) => #153
Disable Annotation "Write Photodiode Data to CSV"(Text="") => #154
#147, #153, #154 -> Disable Bonsai.IO.CsvWriter(FileName=C:/BonsaiData/000000/000000_20260508T224311\behavior/analogInputs.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

SubscribeSubject<System.Single> Orientation
-> Skip(Count=1)
-> Bonsai.Numerics.RadianToDegree
-> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=Square, LineWidth=1, CurveSettings="", Capacity=9, Min=nil, Max=nil)
-> VisualizerMapping => #160
SubscribeSubject analogData
-> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="Value.AnalogInput0,Value.AnalogInput1", SymbolType=None, LineWidth=1, CurveSettings="", Capacity=24194, Min=nil, Max=nil)
-> VisualizerMapping => #163
#160, #163 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
