<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:BonVision.Collections;assembly=BonVision"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>560</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Navy</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>natural_movie_TOE_3_shuffle</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\natural_movie_TOE_3_shuffle.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>natural_movie_TOE_2_shuffle</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\natural_movie_TOE_2_shuffle.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>natural_movie_TOE_2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\natural_movie_TOE_2.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>natural_movie_TOE_1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\natural_movie_TOE_1.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>natural_movie_TOE_3</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\natural_movie_TOE_3.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>natural_movie_TOE_1_shuffle</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\natural_movie_TOE_1_shuffle.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>zebra_allen_screen_60s_tscale_30_xyscale_1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\zebra_allen_screen_60s_tscale_30_xyscale_1.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:VideoTexture">
              <gl:Name>zebra_allen_screen_tscale_30_scale_10</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Movies\zebra_allen_screen_tscale_30_scale_10.mp4</gl:FileName>
              <gl:FlipMode>Vertical</gl:FlipMode>
              <gl:FrameCount xsi:nil="true" />
              <gl:StartPosition>0</gl:StartPosition>
              <gl:BufferLength xsi:nil="true" />
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>ColoredGratings</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>BonVision:Shaders.Gratings.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\ColoredGratings.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>ColorBalance</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms />
              <gl:BufferBindings>
                <gl:BufferBinding xsi:type="gl:TextureBinding">
                  <gl:Name>tex</gl:Name>
                  <gl:TextureSlot>Texture0</gl:TextureSlot>
                  <gl:TextureTarget>Texture2D</gl:TextureTarget>
                </gl:BufferBinding>
              </gl:BufferBindings>
              <gl:FramebufferAttachments />
              <gl:VertexShader>BonVision:Shaders.Quad.vert</gl:VertexShader>
              <gl:FragmentShader>Shaders\ColorBalance.frag</gl:FragmentShader>
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-100</Left>
        <Right>100</Right>
        <Bottom>-60</Bottom>
        <Top>60</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Navy</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>51.8</Width>
        <Height>32.4</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-15.1</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="R" DisplayName="Screen_RedColor (0-1)" />
        <Property Name="G" DisplayName="Screen_GreenColor (0-1)" />
        <Property Name="B" DisplayName="Screen_BlueColor (0-1)" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ColorBalance.bonsai">
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <R>0</R>
        <G>0</G>
        <B>1</B>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
        <ClearColor>Navy</ClearColor>
        <GammaLut>Gamma\2025-07-03-NP1-gammalut.bmp</GammaLut>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>-1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Orientation</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="stimulus_table_path" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>ParameterFiles\pilot_stim_trials_test.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern />
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(string(it[0]) as TextureName,
string(it[1]) as TrialType,
Int32.Parse(it[2]) as TrialDuration,
Single.Parse(it[3]) as ExtentX,
Single.Parse(it[4]) as ExtentY)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ListStim</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExpt</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExpt</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT2S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>Non-Zero</scr:Name>
        <scr:Expression>it&gt;=0</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>DivBy5</scr:Name>
        <scr:Expression>(it-1)%5 == 0</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="MulticastSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ListStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="stimulus_table_duration" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT1M</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ListStim</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TrialDuration</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sum" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Divide" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Ceiling" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>MovieSeries</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsGrating</Name>
              <Description>IsGrating</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TrialType</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>gratings</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>GratingTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:GratingsSpecification">
                      <p1:Trials>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>0</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>45</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>90</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>135</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>180</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>225</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>270</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>1</p1:Contrast>
                          <p1:Orientation>315</p1:Orientation>
                        </p1:GratingParameters>
                        <p1:GratingParameters>
                          <p1:Contrast>0</p1:Contrast>
                          <p1:Orientation>359</p1:Orientation>
                        </p1:GratingParameters>
                      </p1:Trials>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Orientation" Selector="Orientation" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" Selector="Contrast.Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ExtentX</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ExtentY</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Max" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateGratingTrial">
                      <p1:Delay>1</p1:Delay>
                      <p1:Duration>2</p1:Duration>
                      <p1:Diameter>180</p1:Diameter>
                      <p1:X>0</p1:X>
                      <p1:Y>0</p1:Y>
                      <p1:Contrast>1</p1:Contrast>
                      <p1:SpatialFrequency>0.04</p1:SpatialFrequency>
                      <p1:TemporalFrequency>2</p1:TemporalFrequency>
                      <p1:Orientation>0</p1:Orientation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ColoredGratingSequence</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Phase" />
                          <Property Name="SquareWave" />
                          <Property Name="Radius" />
                          <Property Name="Aperture" />
                          <Property Name="Opacity" />
                          <Property Name="ColorR" />
                          <Property Name="ColorG" />
                          <Property Name="ColorB" />
                          <Property Name="ColorA" />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Parameters</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Draw</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>QuadState</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Parameters</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="LocationX" Selector="X" />
                                  <Property Name="LocationY" Selector="Y" />
                                  <Property Name="Angle" Selector="Orientation" />
                                  <Property Name="SpatialFrequency" Selector="SpatialFrequency" />
                                  <Property Name="TemporalFrequency" Selector="TemporalFrequency" />
                                  <Property Name="Contrast" Selector="Contrast" />
                                  <Property Name="ExtentX" Selector="Diameter" />
                                  <Property Name="ExtentY" Selector="Diameter" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Phase" />
                                <Property Name="SquareWave" />
                                <Property Name="Radius" />
                                <Property Name="Aperture" />
                                <Property Name="Opacity" />
                                <Property Name="ColorR" />
                                <Property Name="ColorG" />
                                <Property Name="ColorB" />
                                <Property Name="ColorA" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawColoredGratings.bonsai">
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <Layer>0</Layer>
                                <ExtentX>180</ExtentX>
                                <ExtentY>180</ExtentY>
                                <SpatialFrequency>0.04</SpatialFrequency>
                                <TemporalFrequency>2</TemporalFrequency>
                                <Phase>0</Phase>
                                <Angle>225</Angle>
                                <SquareWave>false</SquareWave>
                                <Contrast>1</Contrast>
                                <DutyCycle xsi:nil="true" />
                                <Radius>1</Radius>
                                <Aperture>0</Aperture>
                                <Opacity>1</Opacity>
                                <ColorR>0</ColorR>
                                <ColorG>0</ColorG>
                                <ColorB>1</ColorB>
                                <ColorA>1</ColorA>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Parameters</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(Duration)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT2S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:SampleOnRenderFrame" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>QuadState</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:TakeUntil" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Parameters</Name>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(Delay)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT1S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="2" To="8" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="9" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="8" Label="Source2" />
                              <Edge From="7" To="8" Label="Source3" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="17" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source2" />
                              <Edge From="17" To="22" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source2" />
                              <Edge From="22" To="23" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Orientation.Value</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Orientation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Record extra 1sec at the end of trial</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Int32(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="1" To="13" Label="Source1" />
                  <Edge From="2" To="10" Label="Source1" />
                  <Edge From="3" To="10" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsMovie</Name>
              <Description>IsMovie</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TrialType</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>movie</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>MovieTrial</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Parameters</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TextureName" Selector="TextureName" />
                      <Property Name="ExtentX" Selector="ExtentX" />
                      <Property Name="ExtentY" Selector="ExtentY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawVideo.bonsai">
                    <TextureName>natural_movie_TOE_1</TextureName>
                    <PlaybackRate>30</PlaybackRate>
                    <Loop>false</Loop>
                    <Angle>0</Angle>
                    <ExtentX>198.4</ExtentX>
                    <ExtentY>111.6</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                    <Layer>0</Layer>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Frame</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeLast">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RootFolder" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>.</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:StripDirectoryPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1:yyyyMMddTHHmmss}</Format>
        <Selector>Value,Timestamp</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OutputTableFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>pilot_stim_trials_permuted.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>./20260418T175852/pilot_stim_trials_permuted.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExpt</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" DisplayName="SettingUpDelay" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EndExpt</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>BoolToFloat</scr:Name>
        <scr:Expression>it? 1.0 : 0.0</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorB" />
          <Property Name="ColorG" />
          <Property Name="ColorR" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentY" DisplayName="Photodiode_ExtentY" />
        <Property Name="ExtentX" DisplayName="Photodiode_ExtentX" />
        <Property Name="LocationX" DisplayName="Photodiode_LocationX" />
        <Property Name="LocationY" DisplayName="Photodiode_LocationY" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>8</ExtentX>
        <ExtentY>8</ExtentY>
        <LocationX>59</LocationX>
        <LocationY>-28</LocationY>
        <Layer>2</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="sync_sqr" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExpt</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="AcqLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="MotorCouplingCPD" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="WheelRadiusOverScreenRatio" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="sync_sqr_freq" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="FrameLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="WheelComPort" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Subject" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="30" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="57" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="51" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="57" To="77" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="79" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="66" To="69" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source2" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="74" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source2" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source2" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source2" />
      <Edge From="79" To="83" Label="Source1" />
      <Edge From="80" To="82" Label="Source1" />
      <Edge From="81" To="82" Label="Source2" />
      <Edge From="82" To="83" Label="Source2" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="86" To="91" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="91" Label="Source2" />
      <Edge From="90" To="91" Label="Source3" />
      <Edge From="91" To="95" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source2" />
      <Edge From="95" To="97" Label="Source1" />
      <Edge From="96" To="97" Label="Source2" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="106" To="107" Label="Source1" />
      <Edge From="108" To="109" Label="Source1" />
      <Edge From="110" To="111" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>